JOB= XYCORR INIT COLSPOT IDXREF DEFPIX INTEGRATE CORRECT

OSCILLATION_RANGE= 1
X-RAY_WAVELENGTH= 1.542
NAME_TEMPLATE_OF_DATA_FRAMES=../cu_PTP1B_base21_01_????.mccd
DATA_RANGE= 1 113
SPOT_RANGE= 1 50
! BACKGROUND_RANGE=1 10 ! rather use defaults (first 5 degree of rotation)   

SPACE_GROUP_NUMBER=0                   ! 0 if unknown
UNIT_CELL_CONSTANTS= 70 80 90 90 90 90 ! put correct values if known
INCLUDE_RESOLUTION_RANGE=50 2.53  ! after CORRECT, insert high resol limit; re-run CORRECT
! IDXREF now obeys INCLUDE_RESOLUTION_RANGE and EXCLUDE_RESOLUTION_RANGE to exclude ice-rings

FRIEDEL'S_LAW=TRUE      ! This acts only on the CORRECT step
TRUSTED_REGION=0.0 1.2 ! partially use corners of detector (0 1.4143: use all pixels)
VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS=6000. 30000. ! often 7000 or 8000 is ok
STRONG_PIXEL=4           ! COLSPOT: only use strong reflections (default is 3)
MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT=3 ! default of 6 is sometimes too high
REFINE(IDXREF)=CELL BEAM ORIENTATION AXIS POSITION  ! works best with XDS >= BUILT=20170720
REFINE(INTEGRATE)= DISTANCE POSITION BEAM ORIENTATION ! AXIS CELL
! REFINE(CORRECT)=CELL BEAM ORIENTATION AXIS DISTANCE POSITION ! Default is: refine everything

! parameters specifically for this detector and beamline:
MINIMUM_VALID_PIXEL_VALUE= 0 OVERLOAD= 65535
SENSOR_THICKNESS= 0

FRACTION_OF_POLARIZATION=0.0   ! better value is provided by beamline staff!
POLARIZATION_PLANE_NORMAL=0 1 0        ! only used by CORRECT
ORGX= 512.0 ORGY= 512.0 
DETECTOR_DISTANCE= 70.0
NX= 1024 NY= 1024 QX= 0.096 QY= 0.096
DIRECTION_OF_DETECTOR_X-AXIS= 0.9848077530122081 0.0 -0.17364817766693036
DIRECTION_OF_DETECTOR_Y-AXIS= 0 1 0
INCIDENT_BEAM_DIRECTION= 0 0 1
ROTATION_AXIS= -0.774667849811764 -0.6323683439800085 -0.0
